<Feature xmlns="http://www.sila-standard.org" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" Category="ilcs" FeatureVersion="1.1" MaturityLevel="Draft" Originator="ai.ses" SiLA2Version="1.0" xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_base/raw/master/schema/FeatureDefinition.xsd">
  <Identifier>TaskExecution</Identifier>
  <DisplayName>Task Execution</DisplayName>
  <Description>ILCS device task contract in SiLA 2 form. Actions are submitted and then polled by the ILCS CommandId; the device never needs to know about batches or workflows. Submit returns as soon as the device has accepted (or rejected) the task; long-running work is observed through QueryTask. Implemented only by devices that take part in automatic workflows.</Description>
  <Command>
    <Identifier>SubmitTask</Identifier>
    <DisplayName>Submit Task</DisplayName>
    <Description>Submit an action. Returns state accepted/running when the device has taken the task, done when it finished synchronously.</Description>
    <Observable>No</Observable>
    <Parameter>
      <Identifier>CommandId</Identifier>
      <DisplayName>Command Id</DisplayName>
      <Description>Stable command identifier issued by ILCS. A device that implements de-duplication MUST return the existing task for a repeated CommandId instead of acting twice.</Description>
      <DataType><Basic>String</Basic></DataType>
    </Parameter>
    <Parameter>
      <Identifier>TaskType</Identifier>
      <DisplayName>Task Type</DisplayName>
      <Description>dispatch | resume | retry | transfer.</Description>
      <DataType><Basic>String</Basic></DataType>
    </Parameter>
    <Parameter>
      <Identifier>Capability</Identifier>
      <DisplayName>Capability</DisplayName>
      <Description>ILCS capability identifier, e.g. cap.assemble.</Description>
      <DataType><Basic>String</Basic></DataType>
    </Parameter>
    <Parameter>
      <Identifier>ParametersJson</Identifier>
      <DisplayName>Parameters Json</DisplayName>
      <Description>JSON object of step parameters, as described by the capability's ParametersSchema in TaskSupport. Matrix plans add params.wells = {well: {param: value}}.</Description>
      <DataType><Basic>String</Basic></DataType>
    </Parameter>
    <Parameter>
      <Identifier>ContextJson</Identifier>
      <DisplayName>Context Json</DisplayName>
      <Description>JSON object: batch_id, step_index, step_id, target_command_id, station_id; method {id, code, version, name, program} when the step uses a device method (program selects the device-side program); material {name, unit, param} when the step doses a material (the dosed amount is params[param]; report the actual amount in delivered.materials under that name). Unknown keys MUST be ignored; wells is reserved for detection steps.</Description>
      <DataType><Basic>String</Basic></DataType>
    </Parameter>
    <Response>
      <Identifier>ResultJson</Identifier>
      <DisplayName>Result Json</DisplayName>
      <Description>JSON receipt: command_id (echo), state (accepted|running|done|failed|unknown|not_found), device_ts (ISO-8601 with offset), quality (good|bad|uncertain), delivered (object; delivered.materials lists actual material consumption), telemetry (list of {metric, value, setpoint}), error (string).</Description>
      <DataType><Basic>String</Basic></DataType>
    </Response>
    <DefinedExecutionErrors>
      <Identifier>InvalidParameters</Identifier>
      <Identifier>Interlocked</Identifier>
      <Identifier>DeviceBusy</Identifier>
      <Identifier>NotSupported</Identifier>
      <Identifier>DeviceUnreachable</Identifier>
    </DefinedExecutionErrors>
  </Command>
  <Command>
    <Identifier>QueryTask</Identifier>
    <DisplayName>Query Task</DisplayName>
    <Description>Return the current receipt of a task by the ILCS CommandId; state not_found if the device never saw it.</Description>
    <Observable>No</Observable>
    <Parameter>
      <Identifier>CommandId</Identifier>
      <DisplayName>Command Id</DisplayName>
      <Description>Stable command identifier issued by ILCS. A device that implements de-duplication MUST return the existing task for a repeated CommandId instead of acting twice.</Description>
      <DataType><Basic>String</Basic></DataType>
    </Parameter>
    <Response>
      <Identifier>ResultJson</Identifier>
      <DisplayName>Result Json</DisplayName>
      <Description>JSON receipt: command_id (echo), state (accepted|running|done|failed|unknown|not_found), device_ts (ISO-8601 with offset), quality (good|bad|uncertain), delivered (object; delivered.materials lists actual material consumption), telemetry (list of {metric, value, setpoint}), error (string).</Description>
      <DataType><Basic>String</Basic></DataType>
    </Response>
    <DefinedExecutionErrors>
      <Identifier>DeviceUnreachable</Identifier>
    </DefinedExecutionErrors>
  </Command>
  <Command>
    <Identifier>HoldTask</Identifier>
    <DisplayName>Hold Task</DisplayName>
    <Description>Hold the in-flight action named by TargetCommandId.</Description>
    <Observable>No</Observable>
    <Parameter>
      <Identifier>CommandId</Identifier>
      <DisplayName>Command Id</DisplayName>
      <Description>Stable command identifier issued by ILCS. A device that implements de-duplication MUST return the existing task for a repeated CommandId instead of acting twice.</Description>
      <DataType><Basic>String</Basic></DataType>
    </Parameter>
    <Parameter>
      <Identifier>TargetCommandId</Identifier>
      <DisplayName>Target Command Id</DisplayName>
      <Description>The in-flight action command this control request applies to.</Description>
      <DataType><Basic>String</Basic></DataType>
    </Parameter>
    <Response>
      <Identifier>ResultJson</Identifier>
      <DisplayName>Result Json</DisplayName>
      <Description>JSON receipt: command_id (echo), state (accepted|running|done|failed|unknown|not_found), device_ts (ISO-8601 with offset), quality (good|bad|uncertain), delivered (object; delivered.materials lists actual material consumption), telemetry (list of {metric, value, setpoint}), error (string).</Description>
      <DataType><Basic>String</Basic></DataType>
    </Response>
    <DefinedExecutionErrors>
      <Identifier>InvalidParameters</Identifier>
      <Identifier>NotSupported</Identifier>
      <Identifier>DeviceUnreachable</Identifier>
    </DefinedExecutionErrors>
  </Command>
  <Command>
    <Identifier>AbortTask</Identifier>
    <DisplayName>Abort Task</DisplayName>
    <Description>Abort the in-flight action named by TargetCommandId and bring the device to a safe state.</Description>
    <Observable>No</Observable>
    <Parameter>
      <Identifier>CommandId</Identifier>
      <DisplayName>Command Id</DisplayName>
      <Description>Stable command identifier issued by ILCS. A device that implements de-duplication MUST return the existing task for a repeated CommandId instead of acting twice.</Description>
      <DataType><Basic>String</Basic></DataType>
    </Parameter>
    <Parameter>
      <Identifier>TargetCommandId</Identifier>
      <DisplayName>Target Command Id</DisplayName>
      <Description>The in-flight action command this control request applies to.</Description>
      <DataType><Basic>String</Basic></DataType>
    </Parameter>
    <Response>
      <Identifier>ResultJson</Identifier>
      <DisplayName>Result Json</DisplayName>
      <Description>JSON receipt: command_id (echo), state (accepted|running|done|failed|unknown|not_found), device_ts (ISO-8601 with offset), quality (good|bad|uncertain), delivered (object; delivered.materials lists actual material consumption), telemetry (list of {metric, value, setpoint}), error (string).</Description>
      <DataType><Basic>String</Basic></DataType>
    </Response>
    <DefinedExecutionErrors>
      <Identifier>InvalidParameters</Identifier>
      <Identifier>NotSupported</Identifier>
      <Identifier>DeviceUnreachable</Identifier>
    </DefinedExecutionErrors>
  </Command>
  <Property>
    <Identifier>DeviceIdentity</Identifier>
    <DisplayName>Device Identity</DisplayName>
    <Description>JSON object: device_id, model, serial, firmware, simulator (true only for simulated devices), interlock (bool), accepts_commands (bool), device_ts. Kept for version 1.0 clients; devices that also implement DeviceInfo report the same facts there.</Description>
    <Observable>No</Observable>
    <DataType><Basic>String</Basic></DataType>
  </Property>
  <Property>
    <Identifier>TaskSupport</Identifier>
    <DisplayName>Task Support</DisplayName>
    <Description>Which capabilities the device runs through this feature and which controls it supports. Served from the driver configuration, so it stays readable while the device is offline. Added in version 1.1; ILCS falls back to the support flags registered for the station when a version 1.0 device does not have it.</Description>
    <Observable>No</Observable>
    <DataType>
      <DataTypeIdentifier>TaskSupport</DataTypeIdentifier>
    </DataType>
  </Property>
  <DefinedExecutionError>
    <Identifier>InvalidParameters</Identifier>
    <DisplayName>Invalid Parameters</DisplayName>
    <Description>Parameters are outside the device limits or malformed. The device did not act.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>Interlocked</Identifier>
    <DisplayName>Interlocked</DisplayName>
    <Description>A safety interlock is active. The device did not act.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>DeviceBusy</Identifier>
    <DisplayName>Device Busy</DisplayName>
    <Description>No free channel or slot. The device did not act.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>NotSupported</Identifier>
    <DisplayName>Not Supported</DisplayName>
    <Description>The device does not support this capability, program or control. The device did not act.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>DeviceUnreachable</Identifier>
    <DisplayName>Device Unreachable</DisplayName>
    <Description>The driver host could not reach the device before doing anything: the device did not act. Raised by QueryTask it means the device cannot be asked right now; ILCS asks again later. A request that may have reached the device MUST NOT be reported with this error.</Description>
  </DefinedExecutionError>
  <DataTypeDefinition>
    <Identifier>TaskSupport</Identifier>
    <DisplayName>Task Support</DisplayName>
    <Description>Capabilities and controls offered through TaskExecution.</Description>
    <DataType>
      <Structure>
        <Element>
          <Identifier>Capabilities</Identifier>
          <DisplayName>Capabilities</DisplayName>
          <Description>Capabilities the device runs.</Description>
          <DataType>
            <List>
              <DataType>
                <DataTypeIdentifier>CapabilityDefinition</DataTypeIdentifier>
              </DataType>
            </List>
          </DataType>
        </Element>
        <Element>
          <Identifier>SupportsHold</Identifier>
          <DisplayName>Supports Hold</DisplayName>
          <Description>HoldTask holds a running action and dispatch with TaskType resume continues it.</Description>
          <DataType>
            <Basic>Boolean</Basic>
          </DataType>
        </Element>
        <Element>
          <Identifier>SupportsAbort</Identifier>
          <DisplayName>Supports Abort</DisplayName>
          <Description>AbortTask stops a running action and brings the device to a safe state.</Description>
          <DataType>
            <Basic>Boolean</Basic>
          </DataType>
        </Element>
        <Element>
          <Identifier>SupportsQuery</Identifier>
          <DisplayName>Supports Query</DisplayName>
          <Description>QueryTask answers reliably by CommandId, also after the driver host restarts.</Description>
          <DataType>
            <Basic>Boolean</Basic>
          </DataType>
        </Element>
        <Element>
          <Identifier>SupportsDedup</Identifier>
          <DisplayName>Supports Dedup</DisplayName>
          <Description>A repeated CommandId returns the existing task without acting twice.</Description>
          <DataType>
            <Basic>Boolean</Basic>
          </DataType>
        </Element>
        <Element>
          <Identifier>Handoff</Identifier>
          <DisplayName>Handoff</DisplayName>
          <Description>sync: SubmitTask returns only after the device accepted or refused the task. async: SubmitTask only hands the task over (e.g. writes a start edge); a refusal (busy, interlock) shows up later through QueryTask.</Description>
          <DataType>
            <Constrained>
              <DataType>
                <Basic>String</Basic>
              </DataType>
              <Constraints>
                <Set>
                  <Value>sync</Value>
                  <Value>async</Value>
                </Set>
              </Constraints>
            </Constrained>
          </DataType>
        </Element>
      </Structure>
    </DataType>
  </DataTypeDefinition>
  <DataTypeDefinition>
    <Identifier>CapabilityDefinition</Identifier>
    <DisplayName>Capability Definition</DisplayName>
    <Description>One capability the device runs.</Description>
    <DataType>
      <Structure>
        <Element>
          <Identifier>Capability</Identifier>
          <DisplayName>Capability</DisplayName>
          <Description>ILCS capability identifier, e.g. cap.plc_run; * (simulators only) accepts any capability.</Description>
          <DataType>
            <Basic>String</Basic>
          </DataType>
        </Element>
        <Element>
          <Identifier>ParametersSchema</Identifier>
          <DisplayName>Parameters Schema</DisplayName>
          <Description>JSON Schema of the parameters the device accepts for this capability: an object schema whose properties give type, unit (annotation), minimum / maximum or enum. Parameters not listed are refused, never silently dropped. ILCS cross-checks it against its capability dictionary and station limits; it does not replace them.</Description>
          <DataType>
            <Constrained>
              <DataType>
                <Basic>String</Basic>
              </DataType>
              <Constraints>
                <ContentType>
                  <Type>application</Type>
                  <Subtype>schema+json</Subtype>
                </ContentType>
              </Constraints>
            </Constrained>
          </DataType>
        </Element>
        <Element>
          <Identifier>Programs</Identifier>
          <DisplayName>Programs</DisplayName>
          <Description>Device-side programs (device methods) usable with this capability; a single entry * accepts any program; empty when the capability has no programs.</Description>
          <DataType>
            <List>
              <DataType>
                <DataTypeIdentifier>ProgramDefinition</DataTypeIdentifier>
              </DataType>
            </List>
          </DataType>
        </Element>
      </Structure>
    </DataType>
  </DataTypeDefinition>
  <DataTypeDefinition>
    <Identifier>ProgramDefinition</Identifier>
    <DisplayName>Program Definition</DisplayName>
    <Description>A device-side program.</Description>
    <DataType>
      <Structure>
        <Element>
          <Identifier>Program</Identifier>
          <DisplayName>Program</DisplayName>
          <Description>Program identifier as ILCS sends it in ContextJson method.program.</Description>
          <DataType>
            <Basic>String</Basic>
          </DataType>
        </Element>
        <Element>
          <Identifier>Name</Identifier>
          <DisplayName>Name</DisplayName>
          <Description>Display name.</Description>
          <DataType>
            <Basic>String</Basic>
          </DataType>
        </Element>
      </Structure>
    </DataType>
  </DataTypeDefinition>
</Feature>
